PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emoreg
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent stimulus
      image [set every repeat] = $stim_path
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = $stimulus.status==FINISHED
      stopVal [duration (s)] = 2
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    ImageComponent neutral_face
      image [set every repeat] = $face_path
      size = (1, 1)
      startVal [condition] = $fixation.status==FINISHED
      stopVal [duration (s)] = 4
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    TextboxComponent jitter
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [condition] = $neutral_face.status==FINISHED
      stopVal [duration (s)] = $jitter_len
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/nvanhaute/Repos/psychopy-emoreg/trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim_path', './stims/1.jpg'), ('face_path', './faces/1.jpg'), ('jitter_len', 4.2)]),
      OrderedDict([('stim_path', './stims/2.jpg'), ('face_path', './faces/2.jpg'), ('jitter_len', 5.3)]),
      OrderedDict([('stim_path', './stims/3.jpg'), ('face_path', './faces/3.jpg'), ('jitter_len', 4.8)]),
      OrderedDict([('stim_path', './stims/4.jpg'), ('face_path', './faces/4.jpg'), ('jitter_len', 7.4)]),
      OrderedDict([('stim_path', './stims/5.jpg'), ('face_path', './faces/5.jpg'), ('jitter_len', 4.0)]),
      OrderedDict([('stim_path', './stims/6.jpg'), ('face_path', './faces/6.jpg'), ('jitter_len', 7.8)]),
      OrderedDict([('stim_path', './stims/7.jpg'), ('face_path', './faces/7.jpg'), ('jitter_len', 7.4)]),
      OrderedDict([('stim_path', './stims/8.jpg'), ('face_path', './faces/8.jpg'), ('jitter_len', 6.2)]),
      OrderedDict([('stim_path', './stims/9.jpg'), ('face_path', './faces/9.jpg'), ('jitter_len', 6.5)]),
      OrderedDict([('stim_path', './stims/10.jpg'), ('face_path', './faces/10.jpg'), ('jitter_len', 5.3)])]
    Routine trial
  LoopTerminator trials
